PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Stim
    ImageComponent image
      image = C:/Users/mattp/Pictures/image (9).png
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $"C:/Users/mattp/Documents/GitHub/Rhodes_Experiment/Images/Language 1 - Vowel Harmony (sample 16 harmonic singular stims)/" + Stim + ".png"
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        total_trials = 0
        avg_acc = -1
        count_acc = 0
      End Routine:
        total_trials = total_trials + 1
        count_acc = count_acc + key_resp.corr
        avg_acc = count_acc/total_trials


        if(total_trials >= 3):
            if(avg_acc >= 0.80):
                cleared_blocks = cleared_blocks + 1
            trainingBlock.finished = True
            total_trials = 0
            count_acc = 0
        if(cleared_blocks == 5):
            trials.finished = True
  Routine feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Response time was: ' + str(resp.time[0])
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  Routine routine_1
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    CodeComponent rt_fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a mouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    TextComponent rt_fb2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine feedback_2
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    CodeComponent fb_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'
        debug_text = 'default'

        try:
            if key_resp.corr:
                fb_text = f'Correct! {avg_acc:.2f}'
                fb_col = 'green'
            else:
                fb_text = f'Incorrect! {avg_acc:.2f}'
                fb_col = 'red'
            debug_text = f'{cleared_blocks} cleared \n trial {total_trials}'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text + '\n' + debug_text
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  Routine routine
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = success
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  Routine routine_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        new block
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        cleared_blocks = 0
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine routine_2
    LoopInitiator trainingBlock loopType="TrialHandler"
      conditionsFile = stimuli.csv
      loopType = random
      nReps = 3
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      conditions:
        [OrderedDict([('Stim_Number', 1), ('Stim', 'budo'), ('Vowel', 'back'), ('Grammar', 'VH'), ('Grammaticality', 'yes'), ('Exposure', 'familiar'), ('MP3', 'budomu'), ('IPAsingular', 'ˈbu . do'), ('IPAplural', 'ˈbu . do . mu'), ('ViolationSyllable', 0), ('ViolationType', 'none'), ('corrAns', 'left')]),
        OrderedDict([('Stim_Number', 2), ('Stim', 'dimi'), ('Vowel', 'front'), ('Grammar', 'VH'), ('Grammaticality', 'yes'), ('Exposure', 'familiar'), ('MP3', 'dimimi'), ('IPAsingular', 'ˈdi . mi'), ('IPAplural', 'ˈdi . mi . mi'), ('ViolationSyllable', 0), ('ViolationType', 'none'), ('corrAns', 'left')]),
        OrderedDict([('Stim_Number', 3), ('Stim', 'dupu'), ('Vowel', 'back'), ('Grammar', 'VH'), ('Grammaticality', 'yes'), ('Exposure', 'familiar'), ('MP3', 'dupumu'), ('IPAsingular', 'ˈdu . pu'), ('IPAplural', 'ˈdu . pu . mu'), ('ViolationSyllable', 0), ('ViolationType', 'none'), ('corrAns', 'left')]),
        OrderedDict([('Stim_Number', 4), ('Stim', 'gene'), ('Vowel', 'front'), ('Grammar', 'VH'), ('Grammaticality', 'yes'), ('Exposure', 'familiar'), ('MP3', 'genemi'), ('IPAsingular', 'ˈge . ne'), ('IPAplural', 'ˈge . ne . mi'), ('ViolationSyllable', 0), ('ViolationType', 'none'), ('corrAns', 'left')]),
        OrderedDict([('Stim_Number', 5), ('Stim', 'gipi'), ('Vowel', 'front'), ('Grammar', 'VH'), ('Grammaticality', 'yes'), ('Exposure', 'familiar'), ('MP3', 'gipimi'), ('IPAsingular', 'ˈgi . pi'), ('IPAplural', 'ˈgi . pi . mi'), ('ViolationSyllable', 0), ('ViolationType', 'none'), ('corrAns', 'left')])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
      Routine trial
      Routine feedback_2
    LoopTerminator trainingBlock
  LoopTerminator trials
  Routine routine
